// This CellML file was generated on 24/07/2008 at 1:08:46 at p.m. using:
//
// COR (0.9.31.979)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// comment: FN Geoff Nunns; This model runs in PCEnv and is based off the NEURON code for this paper. The units are continuous throughout but the model does not recreate the published results. It utilizes DAE solving techniques and advances in these could result in better output.
// created: W3CDTF 2008-07-08T00:00:00+00:00
// creator: Orgname Auckland Bioengineering Institute; Orgunit CellML Team; gnunns1@jhem.jhu.edu; Given Geoffrey; Family Nunns; Other Rogan
// reference: Pubmed_id 18474856; Given Milena; Family Winograd; Given Alain; Family Destexhe; Given Maria; Family Sanchez-Vives; Other V; title Hyperpolarization-activated graded persistent activity in the prefrontal cortex; volume 105; first_page 7298; title Proceedings of the National Academy of Sciences; W3CDTF 2008-05-20 00:00; last_page 7303
// reference: subject_type keyword; calcium dynamics; electrophysiology; signal transduction
// comment: FN Geoff Nunns; This model runs in PCEnv and is based off the NEURON code for this paper. The units are continuous throughout but the model does not recreate the published results. It utilizes DAE solving techniques and advances in these could result in better output.
def model winograd_destexhe_sanchez_vives_2008 as

  def comp environment as
    var time: dimensionless {pub: out};
  enddef;

  def comp membrane as
    var V: dimensionless {init: -70, pub: out};
    var V_T: dimensionless {init: -55, pub: out};
    var V_S: dimensionless {init: 0, pub: out};
    var C_m: dimensionless {init: 1e-3};
    var F: dimensionless {init: 96489, pub: out};
    var R: dimensionless {init: 8.314, pub: out};
    var T: dimensionless {init: 296.65, pub: out};
    var I_leak: dimensionless {pub: in};
    var I_Na: dimensionless {pub: in};
    var I_KD: dimensionless {pub: in};
    var I_KM: dimensionless {pub: in};
    var I_CaL: dimensionless {pub: in};
    var I_h: dimensionless {pub: in};
    var I_app: dimensionless {pub: in};
    var time: dimensionless {pub: in};
    ode(V, time) = 1e-3{dimensionless}*(I_app+(-I_leak)-I_Na-I_KD-I_KM-I_CaL-I_h)/C_m;
  enddef;

  def comp stimulus_protocol as
    var I_app: dimensionless {pub: out};
    var i_stimStart: dimensionless {init: 5};
    var i_stimEnd: dimensionless {init: 9};
    var i_stimAmplitude: dimensionless {init: -0.3};
    var time: dimensionless {pub: in};
    var tau: dimensionless;
    var period: dimensionless {init: 9};
    tau = time-period*floor(time/period);
    I_app = sel
      case (tau >= i_stimStart) and (tau <= i_stimEnd):
        i_stimAmplitude;
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp I_leak as
    var I_leak: dimensionless {pub: out};
    var g_leak: dimensionless {init: 1};
    var E_leak: dimensionless {init: -70};
    var V: dimensionless {pub: in};
    I_leak = 1000{dimensionless}*g_leak*(V-E_leak);
  enddef;

  def comp I_Na as
    var I_Na: dimensionless {pub: out};
    var g_Na: dimensionless {init: 70};
    var E_Na: dimensionless {init: 50};
    var V_S: dimensionless {priv: out, pub: in};
    var V_T: dimensionless {priv: out, pub: in};
    var V: dimensionless {priv: out, pub: in};
    var time: dimensionless {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    I_Na = 1000{dimensionless}*g_Na*pow(m, 3{dimensionless})*h*(V-E_Na);
  enddef;

  def comp Na_m_gate as
    var m: dimensionless {init: 0, pub: out};
    var V_T: dimensionless {pub: in};
    var V: dimensionless {pub: in};
    var time: dimensionless {pub: in};
    var alpha: dimensionless;
    var beta: dimensionless;
    var tau_m: dimensionless;
    var m_inf: dimensionless;
    alpha = sel
      case abs((13{dimensionless}+V_T-V)/4{dimensionless}) < 1e-6{dimensionless}:
        0.32{dimensionless}*4{dimensionless}*(1{dimensionless}-(13{dimensionless}+V_T-V)/(2{dimensionless}*4{dimensionless}));
      otherwise:
        0.32{dimensionless}*(13{dimensionless}+V_T-V)/(exp((13{dimensionless}+V_T-V)/4{dimensionless})-1{dimensionless});
    endsel;
    beta = sel
      case abs(-(V-V_T-40{dimensionless})/5{dimensionless}) < 1e-6{dimensionless}:
        -0.28{dimensionless}*5{dimensionless}*(1{dimensionless}-(-(V-V_T-40{dimensionless})/(2{dimensionless}*5{dimensionless})));
      otherwise:
        -0.28{dimensionless}*(V-V_T-40{dimensionless})/(exp(-(V-V_T-40{dimensionless})/5{dimensionless})-1{dimensionless});
    endsel;
    tau_m = 1{dimensionless}/(alpha+beta);
    m_inf = alpha/(alpha+beta);
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp Na_h_gate as
    var h: dimensionless {init: 0, pub: out};
    var V_S: dimensionless {pub: in};
    var V_T: dimensionless {pub: in};
    var V: dimensionless {pub: in};
    var time: dimensionless {pub: in};
    var alpha_h: dimensionless;
    var beta_h: dimensionless;
    var h_inf: dimensionless;
    var tau_h: dimensionless;
    alpha_h = 0.128{dimensionless}*exp((17{dimensionless}+V_T+V_S-V)/18{dimensionless});
    beta_h = 4{dimensionless}/(1{dimensionless}+exp((40{dimensionless}+V_S+V_T-V)/5{dimensionless}));
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    h_inf = alpha_h/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp I_KD as
    var I_KD: dimensionless {pub: out};
    var g_KD: dimensionless {init: 7};
    var E_K: dimensionless {init: -95, pub: out};
    var V_T: dimensionless {priv: out, pub: in};
    var V: dimensionless {priv: out, pub: in};
    var time: dimensionless {priv: out, pub: in};
    var n: dimensionless {priv: in};
    I_KD = 1000{dimensionless}*g_KD*pow(n, 4{dimensionless})*(V-E_K);
  enddef;

  def comp KD_n_gate as
    var n: dimensionless {init: 0, pub: out};
    var V_T: dimensionless {pub: in};
    var V: dimensionless {pub: in};
    var time: dimensionless {pub: in};
    var alpha_n: dimensionless;
    var beta_n: dimensionless;
    var tau_n: dimensionless;
    var n_inf: dimensionless;
    alpha_n = sel
      case abs((V-V_T-15{dimensionless})/5{dimensionless}) < 1e-6{dimensionless}:
        -0.032{dimensionless}*5{dimensionless}*(1{dimensionless}-(V-V_T-15{dimensionless})/(2{dimensionless}*5{dimensionless}));
      otherwise:
        -0.032{dimensionless}*(V-V_T-15{dimensionless})/(exp((V-V_T-15{dimensionless})/5{dimensionless})-1{dimensionless});
    endsel;
    beta_n = sel
      case abs(-(V-V_T-10{dimensionless})/40{dimensionless}) < 1e-6{dimensionless}:
        0.5{dimensionless}*40{dimensionless}*(1{dimensionless}+(V-V_T-10{dimensionless})/(2{dimensionless}*40{dimensionless}));
      otherwise:
        0.5{dimensionless}*(-(V-V_T-10{dimensionless}))/(exp(-(V-V_T-10{dimensionless})/40{dimensionless})-1{dimensionless});
    endsel;
    tau_n = 1{dimensionless}/(alpha_n+beta_n);
    n_inf = alpha_n/(alpha_n+beta_n);
    ode(n, time) = (n_inf-n)/tau_n;
  enddef;

  def comp I_KM as
    var I_KM: dimensionless {pub: out};
    var g_KM: dimensionless {init: 0.004};
    var E_K: dimensionless {pub: in};
    var V: dimensionless {priv: out, pub: in};
    var time: dimensionless {priv: out, pub: in};
    var p: dimensionless {priv: in};
    I_KM = 1000{dimensionless}*g_KM*p*(V-E_K);
  enddef;

  def comp KM_p_gate as
    var p: dimensionless {init: 0, pub: out};
    var V: dimensionless {pub: in};
    var time: dimensionless {pub: in};
    var p_inf: dimensionless;
    var tau_p: dimensionless;
    var tau_max: dimensionless {init: 4};
    p_inf = sel
      case (-(V+35{dimensionless})/10{dimensionless} < 25{dimensionless}) and (-(V+35{dimensionless})/10{dimensionless} > -25{dimensionless}):
        1{dimensionless}/(1{dimensionless}+exp(-(V+35{dimensionless})/10{dimensionless}));
      otherwise:
        1{dimensionless};
    endsel;
    tau_p = sel
      case ((V+35{dimensionless})/20{dimensionless} < 25{dimensionless}) and ((V+35{dimensionless})/20{dimensionless} > -25{dimensionless}):
        tau_max/(3.3{dimensionless}*exp((V+35{dimensionless})/20{dimensionless})+exp(-(V+35{dimensionless})/20{dimensionless}));
      otherwise:
        1{dimensionless};
    endsel;
    ode(p, time) = (p_inf-p)/tau_p;
  enddef;

  def comp I_CaL as
    var I_CaL: dimensionless {pub: out};
    var P_Ca: dimensionless {init: 2.76e-4};
    var V: dimensionless {priv: out, pub: in};
    var time: dimensionless {priv: out, pub: in};
    var G: dimensionless {pub: in};
    var q: dimensionless {priv: in};
    I_CaL = 1000{dimensionless}*P_Ca*sqr(q)*G;
  enddef;

  def comp CaL_q_gate as
    var q: dimensionless {init: 0.00247262, pub: out};
    var V: dimensionless {pub: in};
    var time: dimensionless {pub: in};
    var alpha_q: dimensionless;
    var beta_q: dimensionless;
    var tau_q: dimensionless;
    var q_inf: dimensionless;
    alpha_q = 6.32{dimensionless}/(1{dimensionless}+exp(-(V-5{dimensionless})/13.89{dimensionless}));
    beta_q = sel
      case abs((1.31{dimensionless}-V)/5.36{dimensionless}) < 1e-6{dimensionless}:
        0.02{dimensionless}*(5.36{dimensionless}+(1.31{dimensionless}-V)/2{dimensionless});
      otherwise:
        0.02{dimensionless}*(1.31{dimensionless}-V)/(1{dimensionless}-exp((V-1.31{dimensionless})/5.36{dimensionless}));
    endsel;
    tau_q = 1{dimensionless}/(alpha_q+beta_q);
    q_inf = 1{dimensionless}/(1{dimensionless}+exp((V+10{dimensionless})/(-10{dimensionless})));
    ode(q, time) = (q_inf-q)/tau_q;
  enddef;

  def comp G_nonlin as
    var G: dimensionless {pub: out};
    var Z: dimensionless {init: 2};
    var Ca_o: dimensionless {init: 2};
    var V: dimensionless {pub: in};
    var time: dimensionless {priv: out, pub: in};
    var F: dimensionless {priv: out, pub: in};
    var R: dimensionless {priv: out, pub: in};
    var T: dimensionless {priv: out, pub: in};
    var I_CaL: dimensionless {priv: out, pub: in};
    var Ca_i: dimensionless {priv: in, pub: out};
    G = sqr(Z)*sqr(F)*1e-3{dimensionless}*V/(R*T)*1e-6{dimensionless}*(Ca_i-Ca_o*exp(Z*F*1e-3{dimensionless}*V/(R*T)))/(1{dimensionless}-exp(1e-3{dimensionless}*Z*F*V/(R*T)));
  enddef;

  def comp dCa_i_dt as
    var Ca_i: dimensionless {init: 100e-6, pub: out};
    var Ca_inf: dimensionless {init: 100e-6};
    var tau_r: dimensionless {init: 17e-3};
    var d: dimensionless {init: 1e-4};
    var time: dimensionless {pub: in};
    var drive_channel: dimensionless;
    var k: dimensionless {init: 0.1};
    var I_CaL: dimensionless {pub: in};
    var F: dimensionless {pub: in};
    var R: dimensionless {pub: in};
    var T: dimensionless {pub: in};
    drive_channel = k*I_CaL/(2{dimensionless}*F*d);
    ode(Ca_i, time) = sel
      case drive_channel <= 0{dimensionless}:
        (Ca_inf-Ca_i)/tau_r;
      otherwise:
        drive_channel+(Ca_inf-Ca_i)/tau_r;
    endsel;
  enddef;

  def comp I_h as
    var I_h: dimensionless {pub: out};
    var m: dimensionless;
    var E_h: dimensionless {init: -20};
    var g_hbar: dimensionless {init: 0.02};
    var cac: dimensionless {init: 0.006};
    var V: dimensionless {priv: out, pub: in};
    var V_S: dimensionless {init: 0, priv: out};
    var Ca_i: dimensionless {priv: out, pub: in};
    var o_1: dimensionless {priv: in};
    var o_2: dimensionless {priv: in};
    var g_inc: dimensionless {init: 2};
    m = o_1+g_inc+o_2;
    I_h = 1000{dimensionless}*g_hbar*m*(V-E_h);
  enddef;

  def comp kinetic as
    var p_0: dimensionless;
    var p_1: dimensionless {pub: out};
    var c_1: dimensionless;
    var o_1: dimensionless {pub: out};
    var o_2: dimensionless {pub: out};
    var alpha: dimensionless {pub: in};
    var beta: dimensionless {pub: in};
    var k_1Ca: dimensionless {pub: in};
    var k_2: dimensionless {pub: in};
    var k_3p: dimensionless {pub: in};
    var k_4: dimensionless {pub: in};
    p_0 = p_1*k_2/k_1Ca;
    p_1 = 1{dimensionless}-p_0;
    c_1 = beta/alpha*o_1;
    o_1 = k_4/k_3p*o_2;
    o_2 = 1{dimensionless}-c_1-o_1;
  enddef;

  def comp rate_constants as
    var h_inf: dimensionless;
    var tau_s: dimensionless;
    var alpha: dimensionless {pub: out};
    var beta: dimensionless {pub: out};
    var k_1Ca: dimensionless {pub: out};
    var k_3p: dimensionless {pub: out};
    var V: dimensionless {pub: in};
    var V_S: dimensionless {pub: in};
    var p_1: dimensionless {pub: in};
    var k_2: dimensionless {init: 0.1, pub: out};
    var P_c: dimensionless {init: 0.01};
    var k_4: dimensionless {init: 1, pub: out};
    var n_Ca: dimensionless {init: 4};
    var n_exp: dimensionless {init: 1};
    var p_C: dimensionless {init: 0.01};
    var Ca_c: dimensionless {init: 0.006};
    var Ca_i: dimensionless {pub: in};
    var tau_m: dimensionless {init: 20e-3};
    h_inf = 1{dimensionless}/(1{dimensionless}+exp((V+75{dimensionless}-V_S)/5.5{dimensionless}));
    tau_s = tau_m+1000{dimensionless}/(exp((V+71.55{dimensionless}-V_S)/14.2{dimensionless})+exp(-(V+89{dimensionless}-V_S)/11.6{dimensionless}));
    alpha = h_inf/tau_s;
    beta = (1{dimensionless}-h_inf)/tau_s;
    k_1Ca = k_2*pow(Ca_i/Ca_c, n_Ca);
    k_3p = k_4*pow(p_1/p_C, n_exp);
  enddef;

  def group as encapsulation for
    comp I_Na incl
      comp Na_m_gate;
      comp Na_h_gate;
    endcomp;
    comp I_KD incl
      comp KD_n_gate;
    endcomp;
    comp I_KM incl
      comp KM_p_gate;
    endcomp;
    comp I_CaL incl
      comp CaL_q_gate;
    endcomp;
    comp G_nonlin incl
      comp dCa_i_dt;
    endcomp;
    comp I_h incl
      comp kinetic;
      comp rate_constants;
    endcomp;
  enddef;
  def map between I_Na and environment for
    vars time and time;
  enddef;
  def map between I_Na and membrane for
    vars V and V;
    vars I_Na and I_Na;
    vars V_T and V_T;
    vars V_S and V_S;
  enddef;
  def map between I_Na and Na_m_gate for
    vars V_T and V_T;
    vars V and V;
    vars time and time;
    vars m and m;
  enddef;
  def map between I_Na and Na_h_gate for
    vars V_S and V_S;
    vars V_T and V_T;
    vars V and V;
    vars time and time;
    vars h and h;
  enddef;
  def map between I_KD and environment for
    vars time and time;
  enddef;
  def map between I_KD and membrane for
    vars V and V;
    vars I_KD and I_KD;
    vars V_T and V_T;
  enddef;
  def map between I_KD and KD_n_gate for
    vars V_T and V_T;
    vars V and V;
    vars time and time;
    vars n and n;
  enddef;
  def map between I_KM and environment for
    vars time and time;
  enddef;
  def map between I_KM and membrane for
    vars V and V;
    vars I_KM and I_KM;
  enddef;
  def map between I_KM and KM_p_gate for
    vars V and V;
    vars time and time;
    vars p and p;
  enddef;
  def map between I_KD and I_KM for
    vars E_K and E_K;
  enddef;
  def map between I_CaL and environment for
    vars time and time;
  enddef;
  def map between I_CaL and membrane for
    vars V and V;
    vars I_CaL and I_CaL;
  enddef;
  def map between I_CaL and CaL_q_gate for
    vars V and V;
    vars time and time;
    vars q and q;
  enddef;
  def map between G_nonlin and environment for
    vars time and time;
  enddef;
  def map between G_nonlin and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between G_nonlin and dCa_i_dt for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars I_CaL and I_CaL;
    vars Ca_i and Ca_i;
  enddef;
  def map between G_nonlin and I_CaL for
    vars G and G;
    vars I_CaL and I_CaL;
  enddef;
  def map between I_leak and membrane for
    vars V and V;
    vars I_leak and I_leak;
  enddef;
  def map between I_h and membrane for
    vars V and V;
    vars I_h and I_h;
  enddef;
  def map between kinetic and rate_constants for
    vars p_1 and p_1;
    vars alpha and alpha;
    vars beta and beta;
    vars k_1Ca and k_1Ca;
    vars k_2 and k_2;
    vars k_3p and k_3p;
    vars k_4 and k_4;
  enddef;
  def map between I_h and kinetic for
    vars o_1 and o_1;
    vars o_2 and o_2;
  enddef;
  def map between I_h and rate_constants for
    vars V and V;
    vars V_S and V_S;
    vars Ca_i and Ca_i;
  enddef;
  def map between I_h and G_nonlin for
    vars Ca_i and Ca_i;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and stimulus_protocol for
    vars time and time;
  enddef;
  def map between stimulus_protocol and membrane for
    vars I_app and I_app;
  enddef;
  // Hyperpolarization-Activated Graded Persistent Activity in the Prefrontal Cortex
  //
  // Geoffrey Nunns
  //
  // Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model runs in PCEnv and is based off the NEURON code for this paper. The units are continuous throughout but the model does not recreate the published results. It utilizes DAE solving techniques and advances in these could result in better output.
  //
  // Model Structure
  //
  // Abstract: We describe a phenomenon of hyperpolarization-activated graded persistent activity (HAGPA) in prefrontal cortex neurons. Successive hyperpolarizing pulses induced increasingly higher rates of tonic firing that remained stable for tens of seconds, allowing the neuron to retain a memory of the previous history of stimulation. This phenomenon occurred at the cellular level and in the absence of neuromodulators. Neurons with HAGPA had a sag during hyperpolarization, and blocking h-current eliminated the sag and prevented HAGPA, suggesting that the activation of this hyperpolarization-activated cationic current was necessary for the occurrence of the phenomenon. A single-neuron biophysical model including h-current modulation by intracellular calcium was able to display HAGPA. This form of neuronal memory not only allows the transformation of inhibition into an increase of firing rate, but also endows neurons with a mechanism to compute the properties of successive inputs into persistent activity, thus solving a difficult computational problem.
  //
  // The original paper reference is cited below:
  //
  // Hyperpolarization-Activated Graded Persistent Activity in the Prefrontal Cortex, Milena Winograd, Alain Destexhe, Maria V. Sanchez-Vives, 2008, Proceedings of the National Academy of the Sciences of the United States of America, 105, 7298-7303. PubMed ID: 18474856 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=18474856&dopt=Abstract)
  //
  // model diagram
  //
  // Schematic diagram of the neuron model.
enddef;
